alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args,comments
PeacoQC_Clean,+,root,FSC-A_ASINH,boundary,"min = c(-Inf), max = c(Inf)",,,,,Preprocessed event set after PeacoQC
tumor,+,PeacoQC_Clean,"FSC-A_ASINH,DNA_HEIGHT_ASINH",boundary,"min = c(5.6, 5.3), max = c(8.2, 8.2)",,,,,Initial region containing tumor cells
tumor_fsc_singlets,+,tumor,"FSC-A,FSC-H",flowClust.2d,"K = 3, quantile = 0.95",,,,,Prominent tumor FSC-A/FSC-H cluster before DNA singlet gating
tumor_singlets,+,tumor_fsc_singlets,"DNA_AREA_ASINH,DNA_HEIGHT_ASINH",singletGate,"prediction_level = 0.95, wider_gate = FALSE, subsample_pct = 0.3",,,,,Adaptive DNA singlet gate within the tumor branch
tumor_dna_support,+,tumor_singlets,DNA_AREA_ASINH,boundary,"min = c(6), max = c(8.3)",,,,,DNA-A range support within tumor singlets
cells_keep,+,PeacoQC_Clean,,boolGate,tumor_dna_support,,,,,Tumor branch singlet population passing DNA-A support
